CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "laminb1.jpg")
    Name to assign these images:laminb1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "psmad1.jpg")
    Name to assign these images:psmad1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "zo1.jpg")
    Name to assign these images:zo1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:laminb1
    Name the output image:colony_th
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
DilateImage:[module_num:6|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
    Select the input image:colony_th
    Name the output image:colony_dil
    Structuring element:disk,8

RemoveHoles:[module_num:7|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
    Select the input image:colony_dil
    Name the output image:colony_rh
    Size of holes to fill:500

IdentifyObjectsManually:[module_num:8|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
    Select the input image:colony_rh
    Name the objects to be identified:colony_io

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:colony_io
    Name the objects to be identified:colony
    Select the method to identify the secondary objects:Propagation
    Select the input image:colony_rh
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:psmad1
    Name the primary objects to be identified:psmad1_po
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:zo1
    Name the primary objects to be identified:zo1_po
    Typical diameter of objects, in pixel units (Min,Max):5,18
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.8
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:laminb1, psmad1, zo1
    Hidden:1
    Hidden:1
    Hidden:3
    Calculate intensity Zernikes?:None
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    Select objects to measure:colony
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:25
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    Image:laminb1
    Objects to display:Do not use
    Number of bins:10
    Measurement:Mean Fraction
    Color map:Blues_r
    Save display as image?:Yes
    Output image name:Heatmap_laminb1
    Image:psmad1
    Objects to display:Do not use
    Number of bins:10
    Measurement:Mean Fraction
    Color map:Blues_r
    Save display as image?:Yes
    Output image name:Heatmap_psmad1
    Image:zo1
    Objects to display:Do not use
    Number of bins:10
    Measurement:Mean Fraction
    Color map:Blues_r
    Save display as image?:Yes
    Output image name:Heatmap_zo1
