CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "LMNB1.tif")
    Name to assign these images:laminb1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "pSMAD1.tif")
    Name to assign these images:psmad1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:laminb1
    Name the output image:laminb1_th
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RemoveHoles:[module_num:6|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
    Select the input image:laminb1_th
    Name the output image:laminb1_rh
    Size of holes to fill:10

IdentifyPrimaryObjects:[module_num:7|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:laminb1_rh
    Name the primary objects to be identified:nuclei_po
    Typical diameter of objects, in pixel units (Min,Max):30,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['The phosphorylated histone probe is a marker for detecting mitotic cells. By segmenting this channel, a threshold is automatically chosen that identifies the pixels that are "positive" for the PH3 probe. This method will yield inconsistent results if there are no mitotic cells in view, so a minimum threshold value is chosen. This minimum is chosen hueristically, based upon the threshold chosen by this module, e.g. half the chosen threshold.']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
    Select the input image:psmad1
    Name the primary objects to be identified:psmad1_po
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.8
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:9|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notes:['The ph3 probe and dna stain overlap with each other, so this co-localization can be used to classify cells. This is relatioship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects.']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
    Parent objects:nuclei_po
    Child objects:psmad1_po
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:10|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notes:['After the relationship between objects has been ennumerated, the FilterObjects module can transform this relationship into a binary relationship, i.e. 0 if there is no PH3 and 1 if there is PH3.']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
    Select the objects to filter:nuclei_po
    Name the output objects:psmad1_pos_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_psmad1_po_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:11|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notes:['In addition to colocalization, the intensity of the PH3 probe can be used to classify cells. The intensity can be measured within each nuclei object.']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
    Select images to measure:laminb1, psmad1
    Select objects to measure:nuclei_po

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Dropbox (Gladstone)/Ivana _ McDevitt Lab/Manuscript1 _ pSMAD ZO1 PGC_ Figures/Figures_all v2/Cell Profiler/pSMAD1 ZO1 quantification_CP/Images_psmadtimecourse/Quantification_cellprofiler/part2_forgotten6hr values
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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